#pragma rtFunctionErrors=1
#pragma TextEncoding="UTF-8"
#pragma rtGlobals=3 // Use modern global access method and strict wave access.
#pragma version=5.0
#pragma IgorVersion=6.1

//*************************
// Vers. 1.2 092101
//
// Procedures for the MRED panel to allow quick batch reduction of data files
// -as of 8/01, use the new method of requiring only run numbers to select the datafiles
//		and these data failes need not be consecutively numbered
//
//****note that much of this file is becoming obsolete as improved methods for
//reducing multiple files are introduced. Some of these procedures may not last long***
//
//**************************

//panel to allow reduction of a series of files using a selected  protocol
//
//main entry procedure to open the panel, initializing if necessary
Proc ReduceMultipleFiles()

	DoWindow/F Multiple_Reduce_Panel
	if(V_flag == 0)
		InitializeMultReducePanel()
		//draw panel
		Multiple_Reduce_Panel()
		//pop the protocol list
		MRProtoPopMenuProc("", 1, "")
	endif
EndMacro

//create the global variables needed to run the MReduce Panel
//all are kept in root:myGlobals:MRED
//
Proc InitializeMultReducePanel()

	if(DataFolderExists("root:myGlobals:MRED"))
		//ok, do nothing
	else
		//no, create the folder and the globals
		NewDataFolder/O root:myGlobals:MRED
		//		String/G root:myGlobals:MRED:gMRedMatchStr = "*"
		PathInfo catPathName
		if(V_flag == 1)
			string   dum                             = S_path
			string/G root:myGlobals:MRED:gCatPathStr = dum
		else
			string/G root:myGlobals:MRED:gCatPathStr = "no path selected"
		endif
		string/G root:myGlobals:MRED:gMRedList    = "none"
		string/G root:myGlobals:MRED:gMRProtoList = "none"
		string/G root:myGlobals:MRED:gFileNumList = ""
		//		String/G root:myGlobals:MRED:gMRS1 = "no file selected"
		//		String/G root:myGlobals:MRED:gMRS2 = "no file selected"
		//		String/G root:myGlobals:MRED:gMRS3 = "no box selected"
		//		Variable/G root:myGlobals:MRED:gMRV1 =0
		//		Variable/G root:myGlobals:MRED:gMRV2 = 999
	endif
EndMacro

//panel recreation macro for the MRED panel
//
Window Multiple_Reduce_Panel()
	PauseUpdate; Silent 1 // building window...
	NewPanel/W=(535, 72, 951, 228)/K=1 as "Multiple File Reduction"
	ModifyPanel cbRGB=(65535, 49151, 29490)
	ModifyPanel fixedSize=1
	SetDrawLayer UserBack
	DrawLine 7, 30, 422, 30
	SetVariable PathDisplay, pos={77, 7}, size={300, 13}, title="Path"
	SetVariable PathDisplay, help={"This is the path to the folder that will be used to find the SANS data while reducing. If no files appear in the popup, make sure that this folder is set correctly"}
	SetVariable PathDisplay, limits={-Inf, Inf, 0}, value=root:myGlobals:MRED:gCatPathStr
	Button PathButton, pos={3, 3}, size={70, 20}, proc=PickMRPathButton, title="Pick Path"
	Button PathButton, help={"Select the folder containing the raw SANS data files"}
	Button helpButton, pos={385, 3}, size={25, 20}, proc=ShowMRHelp, title="?"
	Button helpButton, help={"Show the help file for reducing multiple files using the same protocol"}
	PopupMenu MRFilesPopup, pos={3, 72}, size={167, 19}, proc=MRedPopMenuProc, title="File(s) to Reduce"
	PopupMenu MRFilesPopup, help={"The displayed file is the one that will be reduced. The entire list will be reduced if \"Reduce All..\" is selected. \r If no items, or the wrong items appear, click on the popup to refresh."}
	PopupMenu MRFilesPopup, mode=1, popvalue="none", value=#"root:myGlobals:MRED:gMRedList"
	SetVariable MRList, pos={3, 48}, size={350, 13}, proc=FileNumberListProc, title="File number list: "
	SetVariable MRList, help={"Enter a comma delimited list of file numbers to reduce. Ranges can be entered using a dash."}
	SetVariable MRList, limits={-Inf, Inf, 1}, value=root:myGlobals:MRED:gFileNumList
	Button ReduceAllButton, pos={3, 128}, size={180, 20}, proc=ReduceAllPopupFiles, title="Reduce All Files in Popup"
	Button ReduceAllButton, help={"This will reduce ALL of the files in the popup list, not just the top file."}
	Button DoneButton, pos={280, 128}, size={110, 20}, proc=MRDoneButtonProc, title="Done Reducing"
	Button DoneButton, help={"When done reducing files, this will close this control panel."}
	//	Button cat_short,pos={310,72},size={90,20},proc=DoCatShort,title="File Catalog"
	//	Button cat_short,help={"Use this button to generate a table with file header information. Very useful for identifying files."}
	//	Button show_cat_short,pos={280,98},size={120,20},proc=ShowCatShort_MRED,title="Show File Catalog"
	//	Button show_cat_short,help={"Use this button to bring the File Catalog window to the front."}
	Button sddList, pos={280, 72}, size={120, 20}, proc=ScatteringAtSDDTableButton, title="Files at SDD List"
	Button sddList, help={"Use this button to generate a table of scattering files at a given ample to detector distance."}
	Button acceptList, pos={280, 98}, size={120, 20}, proc=AcceptMREDList, title="Accept List"
	Button acceptList, help={"Accept the list of files to reduce."}
	PopupMenu MRProto_pop, pos={3, 98}, size={119, 19}, proc=MRProtoPopMenuProc, title="Protocol "
	PopupMenu MRProto_pop, help={"All of the data files in the popup will be reduced using this protocol"}
	PopupMenu MRProto_pop, mode=1, popvalue="none", value=#"root:myGlobals:MRED:gMRProtoList"
EndMacro

//simple procedure to bring the CAT TABLE to the front if it is present
//alerts user, but does nothing else if CAT TABLE is not present
//called by several panels
//
Proc ShowCATWindow()
	DoWindow/F CatVSTable
	if(V_flag == 0)
		DoAlert 0, "There is no File Catalog table. Use the File Catalog button to create one."
	endif
EndMacro

//function takes a list of filenames (just the name, no path , no extension)
//that is COMMA delimited, and creates a new list that is also COMMA delimited
//and contains the full path:file;vers for each file in the list
//and ensures that files in returned list are RAW data , and can be found on disk
//
Function/S FullNameListFromFileList(string list)

	string newList = ""
	string pathStr = ""
	string sepStr  = ","
	PathInfo catPathName
	if(V_flag == 0)
		Abort "CatPath does not exist - use Pick Path to select the data folder"
	endif

	pathStr = S_Path

	variable ii, num, ok
	string str
	string fullName    = ""
	string partialName = ""
	string tempName    = ""

	num = ItemsInList(list, ",")
	ii  = 0
	do
		//take each item, and try to find the file (extensions for raw data should be ;1)
		partialName = StringFromList(ii, list, ",") //COMMA separated list
		if(strlen(partialName) != 0) //null string items will be skipped
			tempName = N_FindValidFilename(partialName) //will add the version # if needed
			fullName = pathStr + tempName               //prepend the path (CAT)

			//discard strings that are not filenames (print the non-files)
			//make sure the file is really a RAW data file
			ok = N_CheckIfRawData(fullName) // 1 if RAW, 0 if unknown type
			if(!ok)
				//write to cmd window that file was not a RAW SANS file
				str = "This file is not recognized as a RAW SANS data file: " + tempName + "\r"
				Print str
			else
				//yes, a valid file:path;ext that is RAW SANS
				//add the full path:file;ext +"," to the newList
				newList += fullName + sepStr
			endif
		endif //partialName from original list != ""
		ii += 1
	while(ii < num) //process all items in list

	return (newList)
End

//takes a COMMA delimited list of files (full path:name;vers output of FullNameListFromFileList()
//function and reduces each of the files in the list
//the protocol is from the global string (wich is NOt in the MRED folder, but in the Protocols folder
//
Function DoReduceList(string list)

	//selected protocol is in a temporary global variable so that it can be used with execute
	SVAR gMredProtoStr = root:myGlobals:Protocols:gMredProtoStr
	//input list is a comma delimited list of individual sample files to be reduced using the
	//given protocol - based on WM proc "ExecuteCmdOnList()"
	//input filenames must be full path:file;ext, so they can be found on disk

	string cmdTemplate = "ExecuteProtocol(\"" + gMredProtoStr + "\",\"%s\")"
	string theItem
	variable index = 0
	string cmd
	variable num = ItemsInList(list, ",")
	do
		theItem = StringFromList(index, list, ",") //COMMA separated list
		if(strlen(theItem) != 0)
			sprintf cmd, cmdTemplate, theItem //null string items will be skipped
			//Print "cmd = ",cmd
			Execute cmd
		endif
		index += 1
	while(index < num) //exit after all items have been processed

	//will continue until all files in list are reduced, according to gMredProtoStr protocol
	return (0)
End

//executed when a list of filenumbers is entered in the box
//responds as if the file popup was hit, to update the popup list contents
//
Function FileNumberListProc(string ctrlName, variable varNum, string varStr, string varName) : SetVariableControl

	MRedPopMenuProc("MRFilesPopup", 0, "")
End

Proc ShowMRHelp(ctrlName) : ButtonControl
	string ctrlName

	DisplayHelpTopic/Z/K=1 "SANS Data Reduction Tutorial[Reduce Multiple Files]"
	if(V_flag != 0)
		DoAlert 0, "The SANS Data Reduction Tutorial Help file could not be found"
	endif
EndMacro

//button procedure for bringing File Catalog window to front, if it exists
//so that the user can see what's going on
//
Proc ShowCatShort_MRED(ctrlName) : ButtonControl
	string ctrlName

	ShowCATWindow()
EndMacro

//allows the user to set the path to the local folder that contains the SANS data
//2 global strings are reset after the path "catPathName" is reset in the function PickPath()
// this path is the only one, the globals are simply for convenience
//
Function PickMRPathButton(string PathButton) : ButtonControl

	PickPath() //sets the main global path string for catPathName

	//then update the "local" copy in the MRED subfolder
	PathInfo/S catPathName
	string dum = S_path
	if(V_flag == 0)
		//path does not exist - no folder selected
		string/G root:myGlobals:MRED:gCatPathStr = "no folder selected"
	else
		string/G root:myGlobals:MRED:gCatPathStr = dum
	endif

	//Update the pathStr variable box
	ControlUpdate/W=Multiple_Reduce_Panel $"PathDisplay"

	//then update the popup list
	MRedPopMenuProc("MRFilesPopup", 1, "")
End

// changes the contents of the popup list of files to be reduced based on the
// range of file numbers entered in the text box
//
Function MREDPopMenuProc(string MRFilesPopup, variable popNum, string popStr) : PopupMenuControl

	string list = GetValidMRedPopupList()
	//
	string/G root:myGlobals:MRED:gMredList = list
	ControlUpdate MRFilesPopup

End

//parses the file number list to get valid raw data filenames for reduction
// -if the numbers and full ranges can be translated to correspond to actual files
// on disk, the popup list is updated - otherwise the offending number is reported
// and the user must fix the problem before any reduction can be done
//
//ParseRunNumberList() does the work, as it does for the protocol panel
//
Function/S GetValidMRedPopupList()

	string commaList = ""
	string semiList  = ""
	SVAR   numList   = root:myGLobals:MRED:gFileNumList

	commaList = N_ParseRunNumberList(numList)
	//convert commaList to a semicolon delimited list
	variable ii
	variable num = ItemsinList(commaList, ",")
	for(ii = 0; ii < num; ii += 1)
		semiList += StringFromList(ii, commaList, ",") + ";"
	endfor
	//	print semiList
	//sort the list
	semiList = SortList(semiList, ";", 0)
	return (semiList)
End

//returns a list of the available protocol waves in the protocols folder
//removes "CreateNew", "tempProtocol" and "fakeProtocol" from list (if they exist)
//since these waves do not contain valid protocol instructions
//
Function MRProtoPopMenuProc(string MRProto_pop, variable popNum, string popStr) : PopupMenuControl

	//get list of currently valid protocols, and put it in the popup (the global list)
	//excluding "tempProtocol" and "CreateNew" if they exist
	SetDataFolder root:myGlobals:Protocols
	string list = WaveList("*", ";", "")
	SetDataFolder root:

	//remove items from the list (list is unchanged if the items are not present)
	list = RemoveFromList("CreateNew", list, ";")
	list = RemoveFromList("tempProtocol", list, ";")
	list = RemoveFromList("fakeProtocol", list, ";")

	string/G root:myGlobals:MRED:gMRProtoList = list
	ControlUpdate MRProto_pop

End

//button procedure to close the panel, and the SDD table if if was generated
//
Function MRDoneButtonProc(string ctrlName) : ButtonControl

	// this button will make sure all files are closed
	//and close the panel

	Close/A
	DoWindow/K Multiple_Reduce_Panel

	DoWindow/K SDDTable
	KillDataFolder root:myGlobals:MRED
End

//button action function caled to reduce all of the files in the "file" popup
//using the protocol specified in the "protocol" popup
//converts list of files into comma delimited list of full path:filename;vers
//that can be reduced as a list
// also sets the current protocol to a global accessible to the list processing routine
//
Function ReduceAllPopupFiles(string ctrlName) : ButtonControl

	//popup (and global list) is a semicolon separated list of files, WITHOUT extensions
	//transform this list into a COMMA delimited list of FULL filenames, and then they can be processed

	SVAR semiList = root:myGlobals:MRED:gMredList

	//process each item in the list, and generate commaList
	variable num       = ItemsInList(semiList, ";")
	variable ii        = 0
	string   commaList = ""
	string   item      = ""
	do
		item       = StringFromList(ii, semiList, ";")
		commaList += item + ","
		ii        += 1
	while(ii < num)
	//080601 - send only the comma list of filenames, not full path:name
	//commaList = FullNameListFromFileList(commaList)		//gets the full file names (including extension) for each item in list

	//get the selected protocol, and pass as a global
	ControlInfo MRProto_pop
	string   protocolNameStr                        = S_Value
	string/G root:myGlobals:Protocols:gMredProtoStr = "root:myGlobals:Protocols:" + protocolNameStr

	//also set this as the current protocol, for the function that writes the averaged waves
	string/G root:myGlobals:Protocols:gProtoStr = protocolNameStr

	//reduce all the files in the list here, using the global protocol(the full reference)
	//DoReduceList is found in MultipleReduce.ipf
	DoReduceList(commaList)

	return 0
End

//****************************
// below are very old procedures, not used (maybe of no value)

//little used procedure - works only with menu selections of list processing
//
Proc ClearFileList()
	string/G root:myGlobals:Protocols:gReduceList = ""
	DoAlert 0, "The file reduction list has been initialized"
	ShowList()
EndMacro

//old procedure, (not used) - data is saved to the catPathName folder, the same folder
//where the data came from in the first place, avoiding extra paths
Proc PickSaveFolder()
	NewPath/O/M="pick folder for averaged data" Save_path
	PathInfo/S Save_path
	if(V_flag == 0)
		//path does not exist - no folder selected
		Print "No destination path selected - save dialog will be presented"
	endif
EndMacro

//little used reduction procedure, asks for protocol, then uses this protocol
//to reduce the files in a list built by selecting files from the CAT window
//did not get favorable reviews from users and may not be kept
//
Proc ReduceFilesInList()

	string protocolName = ""

	//generate a list of valid path:file;ext items, comma separated as the input filenames for
	//ExecuteProtocol(), their final destination

	string   list = root:myGlobals:Protocols:gReduceList
	variable num  = ItemsInList(list, ",")

	list = FullNameListFromFileList(list)

	//Print list

	//get protocolName in the same manner as "recallprotocol" button
	//but remember to set a global for  Execute to use
	SetDataFolder root:myGlobals:Protocols //must be in protocols folder before executing this Proc
	Execute "PickAProtocol()"
	//get the selected protocol wave choice through a global string variable
	protocolName = root:myGlobals:Protocols:gProtoStr
	//If "CreateNew" was selected, ask user to try again
	if(cmpstr("CreateNew", protocolName) == 0)
		Abort "CreateNew is for making a new Protocol. Select a previously saved Protocol"
	endif
	SetDataFolder root:
	//	String/G root:myGlobals:Protocols:gMredProtoStr = "root:myGlobals:Protocols:"+protocolName

	//pass the full path to the protocol for ExecuteProtocol() later
	//Print gMredProtoStr," protocol name"

	DoReduceList(list)

	//	KillStrings/Z gMredProtoStr

	//	SetDataFolder root:

EndMacro

//displays the current contents of the FileList window, for multiple file reduction
//little used function and may not be kept
//
Proc ShowList()

	DoWindow/F ListWin
	if(V_Flag == 0)
		NewNotebook/F=1/N=ListWin as "File List"
	endif
	//clear old window contents, reset the path
	Notebook ListWin, selection={startOfFile, EndOfFile}
	Notebook ListWin, text="\r"

	//Write out each item of the comma-delimited list to the notebook
	string   list    = root:myGlobals:Protocols:gReduceList
	variable index   = 0
	string   theItem = ""
	variable num     = ItemsInList(list, ",")
	do
		theItem = StringFromList(index, list, ",") //COMMA separated list
		if(strlen(theItem) != 0)
			Notebook ListWin, text=(theItem + "\r") //null string items will be skipped
		endif
		index += 1
	while(index < num) //exit after all items are printed
EndMacro

//little used function to add the selected file from the CAT/SHORT window to the fileList
//so that the list of files can be processed batchwise
//
Proc AddSelectionToList()

	if(WinType("CatWin") == 0)
		Abort "There is no CAT/SHORT window. Use the CAT/SHORT button to create one."
	endif
	GetSelection notebook, CatWin, 3
	//build a comma separated list of names
	//does the global variable exist?
	if(exists("root:myGlobals:Protocols:gReduceList") == 2) //a string exists
		//do nothing extra
	else
		//create (initialize) the global string
		string/G root:myGlobals:Protocols:gReduceList = ""
	endif
	string list = root:myGlobals:Protocols:gReduceList
	list += S_Selection + ","
	string/G root:myGlobals:Protocols:gReduceList = list //reassign the global

EndMacro

//little used function to remove the selected file in the CAT/SHORT window from the fileList
Proc RemoveFileFromList()
	//if(WinType("CatWin")==0)
	//Abort "There is no CAT/SHORT window. Use the CAT/SHORT button to create one."
	//Endif
	GetSelection notebook, ListWin, 3
	//remove the selected item from the list
	string list = root:myGlobals:Protocols:gReduceList
	list = RemoveFromList(S_selection, list, ",")
	string/G root:myGlobals:Protocols:gReduceList = list

	ShowList()
EndMacro

// based on WM PossiblyQuoteList(list, separator)
//	Input is a list of names that may contain liberal names.
//	Returns the list with liberal names quoted.
//	Example:
//		Input:		"wave0;wave 1;"
//		Output:		"wave0;'wave 1';"
//	The list is expected to be a standard separated list, like "wave0;wave1;wave2;".
//*****unused*******
Function/S PossiblyQuoteFileList(string list, string separator)

	string item
	string   outputList = ""
	variable ii         = 0
	variable items      = ItemsInList(list, separator)
	do
		if(ii >= items) // no more items?
			break
		endif
		item        = StringFromList(ii, list, separator)
		outputList += PossiblyQuoteName(item) + separator
		ii         += 1
	while(1)
	return outputList
End

Function ScatteringAtSDDTableButton(string ctrlName)

	Execute "CreateScatteringAtSDDTable()"
	return (0)
End

Function AcceptMREDList(string ctrlName)

	SVAR/Z list = root:myGlobals:MRED:gFileNumList
	if(SVAR_Exists(list) == 0) //check for myself
		DoAlert 0, "The Multiple Reduce Panel must be open for you to use this function"
		return (1)
	endif

	// convert the wave to a comma-delimited List
	WAVE/Z numW = $"root:myGlobals:MRED:RunNumber"
	if(waveExists(numW) == 0 || numpnts(numW) == 0)
		DoAlert 0, "Generate a list of files at a specific detector distance using the Files at SDD List button"
		return (0)
	endif

	list = NumWave2IntegerCommaList(numW)

	//force an update If the SVAR exists, then the panel does too - MRED cleans up after itself when done
	DoWindow/F Multiple_Reduce_Panel //bring to front
	MRedPopMenuProc("MRFilesPopup", 0, "") //parse the list, pop the menu

	return (0)
End

// - to create a table of scattering runs at an input SDD
Proc CreateScatteringAtSDDTable(SDD_to_Filter)
	variable SDD_to_Filter

	NewDataFolder/O root:myGlobals:MRED
	DoWindow/F SDDTable

	Make/O/T/N=0 $"root:myGlobals:MRED:Filenames"
	Make/O/T/N=0 $"root:myGlobals:MRED:Suffix"
	Make/O/T/N=0 $"root:myGlobals:MRED:Labels"
	Make/O/D/N=0 $"root:myGlobals:MRED:SDD"
	Make/O/D/N=0 $"root:myGlobals:MRED:RunNumber"
	Make/O/D/N=0 $"root:myGlobals:MRED:IsTrans"

	if(V_Flag == 0)
		SetDataFolder root:myGlobals:MRED
		Edit Labels, SDD, runNumber as "Scattering at SDD"
		DoWindow/C $"SDDTable"

		ModifyTable width(SDD)=40
		ModifyTable width(Labels)=180
		ModifyTable format(RunNumber)=1 //so that HFIR 8-digit numbers are interpreted correctly as integers

		ModifyTable width(Point)=0 //JUN04, remove point numbers - confuses users since point != run
		SetDataFolder root:
	endif

	//get a list of all files in the folder, some will be junk version numbers that don't exist
	string list, partialName, tempName
	string temp = ""
	list = IndexedFile(catPathName, -1, "????") //get all files in folder
	variable numitems, ii, ok

	numitems = ItemsInList(list, ";")

	//loop through all of the files in the list, reading CAT/SHORT information if the file is RAW SANS
	//***version numbers have been removed***
	string str, fullName
	variable lastPoint
	ii = 0

	Make/T/O/N=0 notRAWlist
	do
		//get current item in the list
		partialName = StringFromList(ii, list, ";")
		//get a valid file based on this partialName and catPathName
		tempName = N_FindValidFilename(partialName)
		if(cmpstr(tempName, "") == 0) //a null string was returned
			//write to notebook that file was not found
			//if string is not a number, report the error
			if(numtype(str2num(partialName)) == 2)
				str = "this file was not found: " + partialName + "\r\r"
				//Notebook CatWin,font="Times",fsize=12,text=str
			endif
		else
			//prepend path to tempName for read routine
			PathInfo catPathName
			FullName = S_path + tempName
			//make sure the file is really a RAW data file
			ok = N_CheckIfRawData(fullName)
			if(!ok)
				//write to notebook that file was not a RAW SANS file
				lastPoint = numpnts(notRAWlist)
				InsertPoints lastPoint, 1, notRAWlist
				notRAWlist[lastPoint] = tempname
			else
				//go write the header information to the Notebook
				GetHeaderInfoToSDDWave(fullName, tempName)
			endif
		endif
		ii += 1
	while(ii < numitems)
	//Now sort them all based on the suffix data (orders them as collected)
	//	SortCombineWaves()
	// sort by label
	//	SortCombineByLabel()
	// remove the transmission waves
	//
	RemoveTransFilesFromSDDList()

	// Remove anything not at the desired SDD, then sort by run number
	RemoveWrongSDDFromSDDList(SDD_to_Filter)

	// remove anything named blocked, empty cell, etc.
	RemoveLabeledFromSDDList("EMPTY") //not case-sensitive
	RemoveLabeledFromSDDList("MT CELL") //not case-sensitive
	RemoveLabeledFromSDDList("BLOCKED BEAM") //not case-sensitive
	RemoveLabeledFromSDDList("BEAM BLOCKED") //not case-sensitive

EndMacro

// need fuzzy comparison, since SDD = 1.33 may actually be represented in FP as 1.33000004	!!!
//
Function RemoveLabeledFromSDDList(string findThisStr)

	WAVE/T filenames = $"root:myGlobals:MRED:Filenames"
	WAVE/T suffix    = $"root:myGlobals:MRED:Suffix"
	WAVE/T labels    = $"root:myGlobals:MRED:Labels"
	WAVE   sdd       = $"root:myGlobals:MRED:SDD"
	WAVE   runnum    = $"root:myGlobals:MRED:RunNumber"
	WAVE   isTrans   = $"root:myGlobals:MRED:IsTrans"

	variable ii, loc
	variable num = numpnts(Labels)
	ii = num - 1
	do
		loc = strsearch(labels[ii], findThisStr, 0, 2) //2==case insensitive, but Igor 5 specific
		if(loc != -1)
			Print "Remove w[ii] = ", runnum[ii], "  ", labels[ii]
			DeletePoints ii, 1, filenames, suffix, labels, sdd, runnum, isTrans
		endif
		ii -= 1
	while(ii >= 0)
	return (0)
End

// need fuzzy comparison, since SDD = 1.33 may actually be represented in FP as 1.33000004	!!!
//
Function RemoveWrongSDDFromSDDList(variable tSDD)

	WAVE/T filenames = $"root:myGlobals:MRED:Filenames"
	WAVE/T suffix    = $"root:myGlobals:MRED:Suffix"
	WAVE/T labels    = $"root:myGlobals:MRED:Labels"
	WAVE   sdd       = $"root:myGlobals:MRED:SDD"
	WAVE   runnum    = $"root:myGlobals:MRED:RunNumber"
	WAVE   isTrans   = $"root:myGlobals:MRED:IsTrans"

	variable ii
	variable num = numpnts(sdd)
	variable tol = 0.1
	ii = num - 1
	do
		//		if(abs(sdd[ii] - tSDD) > tol)		//if numerically more than 0.001 m different, they're not the same
		//			DeletePoints ii, 1, filenames,suffix,labels,sdd,runnum,isTrans
		//		endif
		if(trunc(abs(sdd[ii] - tSDD)) > tol) //just get the integer portion of the difference - very coarse comparison
			DeletePoints ii, 1, filenames, suffix, labels, sdd, runnum, isTrans
		endif
		ii -= 1
	while(ii >= 0)

	// now sort
	Sort RunNum, filenames, suffix, labels, sdd, runnum, isTrans
	return (0)
End

Function RemoveTransFilesFromSDDList()

	WAVE/T filenames = $"root:myGlobals:MRED:Filenames"
	WAVE/T suffix    = $"root:myGlobals:MRED:Suffix"
	WAVE/T labels    = $"root:myGlobals:MRED:Labels"
	WAVE   sdd       = $"root:myGlobals:MRED:SDD"
	WAVE   runnum    = $"root:myGlobals:MRED:RunNumber"
	WAVE   isTrans   = $"root:myGlobals:MRED:IsTrans"

	variable ii
	variable num = numpnts(isTrans)
	ii = num - 1
	do
		if(isTrans[ii] != 0)
			DeletePoints ii, 1, filenames, suffix, labels, sdd, runnum, isTrans
		endif
		ii -= 1
	while(ii >= 0)
	return (0)
End

//reads header information and puts it in the appropriate waves for display in the table.
//fname is the full path for opening (and reading) information from the file
//which alreay was found to exist. sname is the file;vers to be written out,
//avoiding the need to re-extract it from fname.
Function GetHeaderInfoToSDDWave(string fname, string sname)

	string textstr, temp, lbl, date_time, suffix
	variable ctime, lambda, sdd, detcnt, cntrate, refNum, trans, thick, xcenter, ycenter, numatten
	variable lastPoint, beamstop

	WAVE/T GFilenames = $"root:myGlobals:MRED:Filenames"
	WAVE/T GSuffix    = $"root:myGlobals:MRED:Suffix"
	WAVE/T GLabels    = $"root:myGlobals:MRED:Labels"
	WAVE   GSDD       = $"root:myGlobals:MRED:SDD"
	WAVE   GRunNumber = $"root:myGlobals:MRED:RunNumber"
	WAVE   GIsTrans   = $"root:myGlobals:MRED:IsTrans"

// FIXME -- verify that GLambda is in this folder with this name
	DoAlert 0,"FIXME -- verify that GLambda is in this folder with this name"

	WAVE   GLambda   = $"root:myGlobals:MRED:lambda"
	lastPoint = numpnts(GLambda)

	InsertPoints lastPoint, 1, GFilenames
	GFilenames[lastPoint] = sname

	//read the file suffix
	InsertPoints lastPoint, 1, GSuffix
	// -- replace the suffix (that doesn't exist in the Nexus file) -- with the filename for now
	GSuffix[lastPoint] = getSuffix(fname)

	// read the sample.label text field
	InsertPoints lastPoint, 1, GLabels
	GLabels[lastPoint] = getSampleDescription(fname)

	//read in the SDD
	InsertPoints lastPoint, 1, GSDD
	GSDD[lastPoint] = getDet_Distance(fname) / 100 //convert [cm] to [m]

	//the run number (not displayed in the table, but carried along)
	InsertPoints lastPoint, 1, GRunNumber
	GRunNumber[lastPoint] = N_GetRunNumFromFile(sname)

	// 0 if the file is a scattering  file, 1 (truth) if the file is a transmission file
	InsertPoints lastPoint, 1, GIsTrans
	GIsTrans[lastPoint] = N_isTransFile(fname) //returns one if beamstop is "out"

	KillWaves/Z w
	return (0)
End
